PsychoPy2experiment version="2022.2.4"
Settings
  Data filename = u'data/%s_%s_%s' % (expInfo['ID'], expName, expInfo['date'])
  Experiment info = {'ID': 'f"{randint(0, 999):03.0f}"', 'Name': '', 'Age': '', 'Gender': "['Female', 'Male', 'Others']"}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['csv/KITTI_mov1.csv', 'csv/KITTI_mov2.csv', 'img/BrownNoise.jpg', 'csv/DemoGTlist.csv', 'img/procedure/Demo_allvectors.mp4', 'img/procedure/Demo_allvectors.png', 'img/procedure/Demo1.mp4', 'img/procedure/Demo1.png', 'img/procedure/Demo2.mp4', 'img/procedure/Demo2.png', 'img/procedure/procedure.png', 'img/mov/Mov1_F01.png', 'img/mov/Mov1_F02.png', 'img/mov/Mov1_F03.png', 'img/mov/Mov1_F04.png', 'img/mov/Mov1_F05.png', 'img/mov/Mov1_F06.png', 'img/mov/Mov1_F07.png', 'img/mov/Mov1_F08.png', 'img/mov/Mov1_F09.png', 'img/mov/Mov1_F10.png', 'img/mov/Mov1_F11.png', 'img/mov/Mov1_F12.png', 'img/mov/Mov1_F13.png', 'img/mov/Mov1_F14.png', 'img/mov/Mov1_F15.png', 'img/mov/Mov2_F01.png', 'img/mov/Mov2_F02.png', 'img/mov/Mov2_F03.png', 'img/mov/Mov2_F04.png', 'img/mov/Mov2_F05.png', 'img/mov/Mov2_F06.png', 'img/mov/Mov2_F07.png', 'img/mov/Mov2_F08.png', 'img/mov/Mov2_F09.png', 'img/mov/Mov2_F10.png', 'img/mov/Mov2_F11.png', 'img/mov/Mov2_F12.png', 'img/mov/Mov2_F13.png', 'img/mov/Mov2_F14.png', 'img/mov/Mov2_F15.png', 'img/demo/Demo_F01.jpg', 'img/demo/Demo_F02.jpg', 'img/demo/Demo_F03.jpg', 'img/demo/Demo_F04.jpg', 'img/demo/Demo_F05.jpg', 'img/demo/Demo_F06.jpg', 'img/demo/Demo_F07.jpg', 'img/demo/Demo_F08.jpg', 'img/demo/Demo_F09.jpg', 'img/demo/Demo_F10.jpg', 'img/demo/Demo_F11.jpg', 'img/demo/Demo_F12.jpg', 'img/demo/Demo_F13.jpg', 'img/demo/Demo_F14.jpg', 'img/demo/Demo_F15.jpg', 'img/BG.png', 'img/circlemasks.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [1496, 967]
  expName = KITTI_Session1_English
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Welcome to our study!

        In this research, we investigate how people perceive motion.
        The total duration of the task is approximately 20 to 30 minutes.

        In this task, you will be asked to report the direction and speed of the presented motion.
        A few demonstrations and practice trials will be shown first.

        Before starting the experiment, we have a request.
        To ensure proper video presentation, please adjust your viewing distance.
        Click the mouse to continue.
    MouseComponent welcome_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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    CodeComponent Initial_code
      Code Type = Auto->JS
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      Begin Experiment:
        #basic info
        frameduration=(2/60); #30Hz for presentation
        maincsv1=('csv/' +'KITTI_mov1.csv')
        maincsv2=('csv/' +'KITTI_mov2.csv')
        imagesize= (1238, 374); #should adjust based on image
        imgCenter=(0,100) #showing above center
        PinkCenter=(0,100)
        controlCenter=(0,-170) #showing below center
        Pinksize=2048
        PinkOpacity=0
        picCenterx=imagesize[0]/2+imgCenter[0]
        picCentery=imagesize[1]/2+imgCenter[1]

        Maxspeed=math.log2(21) #speed is log scale adujstment
        radarradius=600/2 # radius of control panel is 300 pixels
        #the speed from 0-20 pixels/frame, but log2(0) is -Inf
        #So we use 21 (and minus 1) when moving
        # to control speed from 0-20

        #Get EPE
        EPE=[]
        Respcount=[]
        Timediff=[]
        Prescount=[]
        mouse_dX=0
        mouse_dY=0
        mouse1=[]
        mouse2=[]
        mouse3=[]
        mousehit=0
        mousspotx=0
        mousspoty=0
    CodeComponent imageload
      Code Type = JS
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      Begin JS Experiment:
        stimuliName = [];
        stimuliPath = [];
        stimuli = [];
        mov1list = [];
        mov2list = [];
        trainlist = [];

        // we have two movies in a block, and also different movie for training
        for (var i = 1; i<16; i++) {
            stimuliName = "Mov1_F" + i.toString().padStart(2, '0') + ".png"
            stimuliPath = "img/mov/" + stimuliName
            stimuli = new visual.ImageStim({"win": psychoJS.window, "image": stimuliPath, "imagename": "mov1_" + Number.parseInt(i), "size": imagesize, "contrast": 1, "mask": null,"pos":imgCenter, "interpolate": true, "flipHoriz": false, "flipVert": false,"autoDraw" : false});
            stimuli.opacity=1
            mov1list.push(stimuli)
            }

        for (var i = 1; i<16; i++) {
            stimuliName = "Mov2_F" + i.toString().padStart(2, '0') + ".png"
            stimuliPath = "img/mov/" + stimuliName
            stimuli = new visual.ImageStim({"win": psychoJS.window, "image": stimuliPath, "imagename": "mov2_" + Number.parseInt(i), "size": imagesize, "contrast": 1, "mask": null,"pos":imgCenter, "interpolate": true, "flipHoriz": false, "flipVert": false,"autoDraw" : false});
            stimuli.opacity=1
            mov2list.push(stimuli)
            }

        for (var i = 1; i<16; i++) {
            stimuliName = "Demo_F" + i.toString().padStart(2, '0') + ".jpg"
            stimuliPath = "img/demo/" + stimuliName
            stimuli = new visual.ImageStim({"win": psychoJS.window, "image": stimuliPath, "imagename": "train_" + Number.parseInt(i), "size": imagesize, "contrast": 1, "mask": null,"pos":imgCenter, "interpolate": true, "flipHoriz": false, "flipVert": false,"autoDraw" : false});
            stimuli.opacity=1
            trainlist.push(stimuli)
            }


        Brownnoise = new visual.ImageStim({"win": psychoJS.window, "pos": PinkCenter,"image": "img/BrownNoise.jpg","imagename": "Brownnoise", "size": [Pinksize, Pinksize], "opacity": null, "mask": null,"interpolate": true, "flipHoriz": false, "flipVert": false,"autoDraw" : false});
    CodeComponent probedefine
      Code Type = JS
      Begin JS Routine:
        RGB = [-1,1,-1];
        CProbe = new visual.Polygon({"win": psychoJS.window, "name": "CProbe", "size": [7, 7], "edges": 100, "ori": 0.0, "pos": [0, 0], "anchor": "center", "lineWidth": 0.0, "colorSpace": "rgb", "lineColor": [1, 1, -1], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": 1.0, "depth": (- 10.0), "interpolate": true});
        Lprobe = new visual.Polygon({"win": psychoJS.window, "name": "Lprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [((- 120) / 2), 0], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Rprobe = new visual.Polygon({"win": psychoJS.window, "name": "Rprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [(120 / 2), 0], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Uprobe = new visual.Polygon({"win": psychoJS.window, "name": "Uprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [0, (120 / 2)], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Dprobe = new visual.Polygon({"win": psychoJS.window, "name": "Dprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [0, ((- 120) / 2)], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
    CodeComponent onset
      Code Type = JS
      Begin JS Experiment:
        timeLimit = 28 * 60; // 5 minutes in seconds
        startTime = performance.now(); // Record the start time
  Routine DistCalibration
    CodeComponent Card_C
      Code Type = Auto->JS
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      Begin Experiment:
        #50pixels =1VA
        ang=1; #viewing anlge
        prepix=50 #pixels
        stepsize=5 # chnage 5 pixels when adjustment

         #physical credit card size
        Physz=(8.56,5.398)
         # default x-/y- pixels for display card
        Cardx=428
        Cardy=270
      Begin Routine:
        event.clearEvents()
      Each Frame:
        keys=event.getKeys()
        if len(keys):
            console.log(cmPpix)
            if 'right' in keys:
                Cardx += stepsize
            elif 'left' in keys:
                Cardx -= stepsize
            elif 'up' in keys:
                Cardy += stepsize
            elif 'down' in keys:
                Cardy -= stepsize
            elif 'space' in keys:
                continueRoutine=False
                routineForceEnded = true;
        #Card.size=(Cardx,Cardy)
        #Card.draw()
        cmPpix=((Physz[0]/Cardx)+(Physz[1]/Cardy))/2
        tmpcmPpix=Math.round((cmPpix*1000))/1000*10;

        realsz=cmPpix*prepix
        distance=realsz / (2*Math.tan(pi*ang/360))
      End Routine:
        Card_G.setAutoDraw(false);
    KeyboardComponent Card_K
      allowedKeys = 'up','down','left','right','space'
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    TextComponent Card_T1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 320)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every frame]:
        Use the arrow keys to resize the black rectangle to match a credit card.
        This will help calculate the optimal viewing distance.
    PolygonComponent Card_G
      lineWidth = 3
      pos = (0, -20)
      saveStartStop = False
      shape = rectangle
      size [set every frame] = [Cardx,Cardy]
      startVal [time (s)] = 0.0
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    MouseComponent Card_M
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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    TextComponent Card_T2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -300)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Click the mouse when you're done adjusting.
  Routine ShowDistance
    CodeComponent Dis_C_mouse
      Code Type = Auto->JS
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      Begin Routine:
        Backxy=[-300,-250]
        Nextxy=[300,-250]
        clicker_things=[]
      Each Frame:
        clickables=[BackSquare,NextSquare]
        if Dist_M.isPressedIn(clickables[0]):
           continueRoutine = false;
        elif Dist_M.isPressedIn(clickables[1]):
           continueRoutine = false;
           DistanceLoop.finished = true;
    CodeComponent Dis_C_square
      Code Type = JS
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      Begin JS Routine:
        BackSquare = new visual.Rect({"win": psychoJS.window, "name": "BackSquare", width: 175, height: 60, "ori": 0.0, "pos": Backxy, "lineWidth": 1.5, "colorSpace": "rgb", "autoDraw": true, "lineColor": new util.Color([-1,-1,-1]), "opacity": 1.0, "depth": (- 11.0), "interpolate": true, "fillColor": null});
        NextSquare = new visual.Rect({"win": psychoJS.window, "name": "NextSquare", width: 175, height: 60, "ori": 0.0, "pos": Nextxy, "lineWidth": 1.5, "colorSpace": "rgb", "autoDraw": true, "lineColor": new util.Color([-1,-1,-1]), "opacity": 1.0, "depth": (- 11.0), "interpolate": true, "fillColor": null});
      Each JS Frame:
        BackSquare.draw()
        NextSquare.draw()
      End JS Routine:
        BackSquare.setAutoDraw(false)
        NextSquare.setAutoDraw(false)
    TextComponent Dis_T
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every repeat]:
        Please begin the experiment by positioning yourself at the specified distance from the screen.








        If you need to adjust your position again, click “Back.”
        When you’re ready, click “NEXT.”
    MouseComponent Dist_M
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent Dis_T_disinfo
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 100
      pos = (0, 30)
      startVal [time (s)] = 0.0
      text [set every repeat] = $"%3.1f" % ((Math.round(distance/2.54*10)/10) + " inch ") + "(%3.0f" % (Math.round(distance) + " cm)") 
      wrapWidth = 1000
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    TextComponent Dist_T_BACK
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 50
      pos [set every repeat] = (Backxy)
      startVal [time (s)] = 0.0
      text = Back
      wrapWidth = 500
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    TextComponent Dist_T_NEXT
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 50
      pos [set every repeat] = (Nextxy)
      startVal [time (s)] = 0.0
      text = NEXT
      wrapWidth = 500
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  Routine pause
    TextComponent pause_text
      font = arial
      letterHeight = 30
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.2
      wrapWidth = 100
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  Routine moviedemo
    MovieComponent movie_demo
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      loop = True
      movie = img/procedure/Demo_allvectors.mp4
      pos = (0, 100)
      saveStartStop = False
      size = imagesize
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent moviedemo_text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 350)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        A short movie with moving objects in different directions and speeds.

        Please report your perceived motion.
    MouseComponent moviedemo_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    ImageComponent vectorimage
      image = img/procedure/Demo_allvectors.png
      pos = (0, -300)
      size = imagesize
      startVal [time (s)] = 0.0
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    TextComponent moviedemo_text2
      color = 1,1,1
      letterHeight = 30
      pos = (0, -100)
      startVal [time (s)] = 0.0
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      text:
        Click the mouse to continue.
  Routine probeexplain
    TextComponent probeexplain_text1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 300)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Before each trial, a circle indicates the target motion's location.

        During a trial, a flash indicates the target motion's position and timing.
    TextComponent probeexplain_text2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -500)
      startVal [time (s)] = 0.0
      text = Click the mouse to continue.
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    ImageComponent probe_image
      image = img/procedure/procedure.png
      pos = (0, -50)
      size = (850,598)
      startVal [time (s)] = 0.0
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    MouseComponent probeexplain_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine probedefine_2
  Routine Probedefine
    CodeComponent probedemo_code
      Code Type = Auto->JS
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      Begin Routine:
        if probedemo_loop.thisN == 0:
            probedemomp4='img/procedure/Demo1.mp4'
            probedemopng='img/procedure/Demo1.png'
            Probedemotext=("In this case, the flash indicates that the target motion" +
            "\n is the white car moving to the left.")
        elif probedemo_loop.thisN == 1:
            probedemomp4='img/procedure/Demo2.mp4'
            probedemopng='img/procedure/Demo2.png'
            Probedemotext=("In this case, the flash indicates that the target motion" +
            "\n is the signboard moving to the right.")
  Routine precuedemo
    MouseComponent precuedemo_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent precuedemo_code
      Code Type = JS
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      Begin JS Routine:
        if ((probedemo_loop.thisN === 0)) {
            Probex = (385-picCenterx);
            Probey = (picCentery-235);
           } else {
            if ((probedemo_loop.thisN === 1)) {
                Probex = (922-picCenterx);
                Probey = (picCentery-211);
               }
        }
        console.log("picCenterx:" +picCenterx);

        console.log("Probex:" +Probex);
        console.log("Probey:" +Probey);

        Precue_circle = new visual.Polygon({"win": psychoJS.window, "name": "precue_circle", "size": [120, 120], "edges": 100, "ori": 0.0, "pos": [Probex, Probey], "anchor": "center", "lineWidth": 1.5, "colorSpace": "rgb", "lineColor": new util.Color([-1,1,-1]), "opacity": 1.0, "depth": (- 11.0), "interpolate": true, "fillColor": null});
        RGB = [-1,1,-1];
        CProbe = new visual.Polygon({"win": psychoJS.window, "name": "CProbe", "size": [7, 7], "edges": 100, "ori": 0.0, "pos": [Probex, Probey], "anchor": "center", "lineWidth": 0.0, "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": 1.0, "depth": (- 10.0), "interpolate": true});

        CProbe.pos=[Probex,Probey];
        Precue_circle.pos=[Probex,Probey];
      Each JS Frame:
        CProbe.draw()
        Precue_circle.draw()
      End JS Routine:
        Precue_circle.setAutoDraw(false)
        CProbe.setAutoDraw(false)
    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      font = arial
      letterHeight = 30
      pos = (0, 250)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pay attention to the circle's position.

        Click the mouse to continue.
  Routine probedemo
    MovieComponent probedemo_movie
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $probedemomp4
      pos = (0, 100)
      saveStartStop = False
      size = imagesize
      startVal [time (s)] = 0.0
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    ImageComponent probedemo_image
      image [set every repeat] = $probedemopng
      pos = (0, -250)
      size = (256, 256)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent probedemo_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 25
      pos = (0, 400)
      startVal [time (s)] = 0.0
      text [set every repeat] = $Probedemotext
      wrapWidth = 1000
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    MouseComponent probedemo_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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    CodeComponent surroundprobecode
      Code Type = JS
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      Begin JS Routine:
        Lprobe = new visual.Polygon({"win": psychoJS.window, "name": "Lprobe", "size": [5, 5], "edges": 100, "ori": 0.0, "pos": [Probex-60, Probey], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Rprobe = new visual.Polygon({"win": psychoJS.window, "name": "Rprobe", "size": [5, 5], "edges": 100, "ori": 0.0, "pos": [Probex+60, Probey], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Uprobe = new visual.Polygon({"win": psychoJS.window, "name": "Uprobe", "size": [5, 5], "edges": 100, "ori": 0.0, "pos": [Probex, Probey+60], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});
        Dprobe = new visual.Polygon({"win": psychoJS.window, "name": "Dprobe", "size": [5, 5], "edges": 100, "ori": 0.0, "pos": [Probex, Probey-60], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [RGB[0], RGB[1], RGB[2]], "fillColor": [RGB[0], RGB[1], RGB[2]], "opacity": null, "interpolate": true, "autoDraw": true});

        Lprobe.setAutoDraw(true);
        Rprobe.setAutoDraw(true);
        Uprobe.setAutoDraw(true);
        Dprobe.setAutoDraw(true);
      End JS Routine:
        Lprobe.setAutoDraw(false);
        Rprobe.setAutoDraw(false);
        Uprobe.setAutoDraw(false);
        Dprobe.setAutoDraw(false);
  Routine responseexplain
    TextComponent response_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 900
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      text:
        Let's practice the response method.

        Click the mouse to continue.
    CodeComponent responsecode
      Code Type = Auto->JS
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      Begin Routine:
        PinkCenter=[Probex,Probey]
        Brownnoise.pos=PinkCenter
    MouseComponent responseexplain_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine ResponseDemo
    CodeComponent RespDemo_C_Mouse
      Code Type = JS
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      Begin JS Routine:
        document.body.style.cursor='none';
        mouse_dX = 0;
        mouse_dY = 0;
        tmpdelta = [0, 0];
        tmpspd=0;
        mousehit = 0;
        controlCenter=[0,0]
      Each JS Frame:
        [mouse_dX, mouse_dY] = RespDemo_M.getPos();
        delta = [(mouse_dX - controlCenter[0]), (mouse_dY - controlCenter[1])];
        MouseDist = Math.sqrt((Math.pow(delta[0], 2) + Math.pow(delta[1], 2)));
        speedvalue = (Math.pow(2, ((MouseDist / radarradius) * Maxspeed)) - 1);
        console.log("delta:" + delta);
        console.log("MouseDist:" + MouseDist);

        if ((MouseDist <= radarradius)) {
            rad = Math.atan2(delta[1], delta[0]);
            tmpdelta = delta;
            pinkdirection = (((rad * (180 / Math.PI)) + 360) % 360);
            console.log("pinkdirection:" + pinkdirection);
            console.log("speedvalue:" + speedvalue);

            spdcontrol=speedvalue;
            tmpspd = speedvalue;
            mousehit = 1;
            mousespotappear = 1;
            document.body.style.cursor='none';
                resptest = (((("Your response" + `
            Direction: ${(Math.round((pinkdirection * 100)) / 100)}`
            ) + "\u00b0") + `
            Speed: ${(Math.round((speedvalue * 100)) / 100)}`
            ) + "Pixels/Frame");
            respcolor=[-1,1,-1];
        } else {
            rad = Math.atan2(tmpdelta[1], tmpdelta[0]);
            spdcontrol=tmpspd;
            mousespotappear = 0;
            document.body.style.cursor='auto';
            resptest = 'Exceeding the response boundary';
            respcolor=[1,-1,-1];
            if ((mousehit === 0)) {
                pinkdirection = null;
                speedvalue = null;
            }
        }
        mousspotx = ((Math.cos(rad) * MouseDist) + controlCenter[0]);
        mousspoty = ((Math.sin(rad) * MouseDist) + controlCenter[1]);
        xphase = (Math.cos(rad) * spdcontrol);
        yphase = (Math.sin(rad) * spdcontrol);

        [mouse1, mouse2, mouse3] = RespDemo_M.getPressed();
        if (mouse1) {
            routineForceEnded = true;
            continueRoutine = false;
            Responseloop.finished = true;
            Brownnoise.setAutoDraw(false);
        }
    CodeComponent RespDemo_C_Brown
      Code Type = JS
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      Begin JS Routine:
        tmpphasex=0;
        tmpphasey=0;

        Lprobe.pos=[PinkCenter[0]-60,PinkCenter[1]];
        Rprobe.pos=[PinkCenter[0]+60,PinkCenter[1]];
        Uprobe.pos=[PinkCenter[0],PinkCenter[1]+60];
        Dprobe.pos=[PinkCenter[0],PinkCenter[1]-60];

        Lprobe.setAutoDraw(true);
        Rprobe.setAutoDraw(true);
        Uprobe.setAutoDraw(true);
        Dprobe.setAutoDraw(true);
      Each JS Frame:
        // note: Brwonise should move every 2/60 second, so within 33.33ms do nothing, but change for next 33.33ms
        frameTolerance = 0.005;
        startTime = (0-frameTolerance);
        endTime = (1 - frameTolerance);
        frameTime = frameduration;


        if ((t >= startTime) && (t <= endTime)){
            t = ResponseDemoClock.getTime();
             frame = Math.floor(((t - startTime) / frameTime));
            if (frame<=0) {
                frame=0;
            }
            if (frame==0) {
                loonset=t;
            }

             tmpphasex=PinkCenter[0]+xphase * (frame+1);
             tmpphasey=PinkCenter[1]+yphase * (frame+1);
             Brownnoise.pos=[tmpphasex,tmpphasey];
             Brownnoise.draw();
             BrownMask_1.draw();
        } else {
            Brownnoise.setAutoDraw(false);
            BrownMask_1.setAutoDraw(false);
        }
      End JS Routine:
        Brownnoise.setAutoDraw(false);
        BrownMask_1.setAutoDraw(false);
        Lprobe.setAutoDraw(false);
        Rprobe.setAutoDraw(false);
        Uprobe.setAutoDraw(false);
        Dprobe.setAutoDraw(false);
    ImageComponent BrownMask_1
      color = 0.0000, 0.0000, 0.0000
      image = img/BG.png
      mask = img/circlemasks.png
      pos [set every repeat] = (PinkCenter[0],PinkCenter[1])
      saveStartStop = False
      size = (4000,2300)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.5
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    PolygonComponent MouseSpot_1
      fillColor = 0, -1, 1
      lineColor = 0, -1, 1
      opacity [set every frame] = mousespotappear
      pos [set every frame] = mousspotx,mousspoty
      saveStartStop = False
      shape = circle
      size = (5, 5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    MouseComponent RespDemo_M
      forceEndRoutineOnPress = never
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      timeRelativeTo = routine
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    TextComponent RespDemo_T1
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      wrapWidth = 900
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      text:
        To report motion, response noise appears at the target’s location.
        Move the mouse relative to the central circle to control it.
    TextComponent RespDemo_T2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, -380)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      wrapWidth = 900
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      text:
        The angle represents direction, and the radius within the circle represents speed.
        Click the mouse when you're ready to proceed.
    CodeComponent RespDemo_Circle
      Code Type = JS
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      Begin JS Routine:
        CircleResp = new visual.Polygon({"win": psychoJS.window, "name": "CircleResp", "size": [radarradius*2, radarradius*2], "edges": 100, "ori": 0.0, "pos": [0,0], "anchor": "center", "lineWidth": 1.5, "colorSpace": "rgb", "autoDraw": true, "lineColor": new util.Color([0.2,0.2,0.2]), "opacity": 1.0, "depth": (- 14.0), "interpolate": true, "fillColor": null});
        Responseprobe = new visual.Polygon({"win": psychoJS.window, "name": "Dprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [0,0], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [0.2, 0.2, 0.2], "fillColor": [0.2, 0.2, 0.2], "opacity": null, "interpolate": true, "autoDraw": true});
      Each JS Frame:
        CircleResp.draw()
        Responseprobe.draw()
      End JS Routine:
        CircleResp.setAutoDraw(false)
        Responseprobe.setAutoDraw(false)
    TextComponent Resp_feeedback
      color [set every frame] = $respcolor
      letterHeight = 30
      pos = (-500, -100)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      wrapWidth = 1000
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      text [set every frame]:
        $resptest
  Routine moviestart
    TextComponent moviestart_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Now, let's begin the practice.

        A short movie will be shown.
        Please watch it at least three times.
        A flash will indicate the target motion’s position and timing.

        Match the noise motion to the target motion, then click the mouse again when done.

        Click the mouse to start the trial.
    MouseComponent moviestart_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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  Routine moviedefine
    CodeComponent switch_code
      Code Type = Auto->JS
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      Begin Routine:
        #0 is practice block, and 1,2 is formal blocks

        if TrainExpswitch.thisN == 0:
            Instrtext="Let’s do a bit more practice."
            csvfile=('csv/' +'DemoGTlist.csv')
            practicePass=0;
            FBtext1='';
            FBtext2='';
            FBtext3='';
            FBcolor=[0,0,0];
            GTDirection = 0;
            RespDirection = 0;
            GTlength = 0;
            Resplength = 0;
            Traintrial=0;
            Maintrial=0;
        elif TrainExpswitch.thisN == 1:
            Instrtext="Starting the first experimental block." + "\n (There will be no feedback.)"
            csvfile= maincsv1
            Maintrial=0;
        elif TrainExpswitch.thisN == 2:
            Instrtext="Starting the second experimental block." + "\n (There will be no feedback.)"
            csvfile= maincsv2
            Maintrial=40;

        trialpass=1;
        nopassx = [];
        nopassy = [];
        nopassangle = [];
        nopassspeed = [];
        nopasssloc =[];
    TextComponent instruction_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      startVal [time (s)] = 0.0
      text [set every repeat] = $Instrtext
      wrapWidth = 1000
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    MouseComponent instruction_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine precue
    CodeComponent ParaDefine
      Code Type = JS
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      Begin JS Routine:
        tmpdelta = [175, 0];
        tmpspd = 3;
        xphase = ((((Math.cos(pi) * 2) / Pinksize) * t) * 60);
        yphase = ((((Math.sin(pi) * 2) / Pinksize) * t) * 60);


        if ((TrainExpswitch.thisN === 0)) {
                tmpimagelist = trainlist;
        } else {
            if ((TrainExpswitch.thisN === 1)) {
                tmpimagelist = mov1list;
            } else {
                if ((TrainExpswitch.thisN === 2)) {
                tmpimagelist = mov2list;
                }
            }
        }
        console.log(thisTrial["PicX"])



        if (trialpass ===1) {
            Probex = (thisTrial["PicX"]-picCenterx);
            Probey = (picCentery-thisTrial["PicY"]);
            Loc=thisTrial["LocationIndex"]-1;//pos is 1-10
            angle = thisTrial["GT_angle"];
            Speed = thisTrial["GT_Speed"];
            trainrepeatno=1;
        } else {
            if (trialpass ===0) {
                Probex=nopassx;
                Probey=nopassy;
                Loc=nopasssloc;
                angle=nopassangle;
                Speed=nopassspeed;
                Loc=nopasssloc;
                trainrepeatno=trainrepeatno+1;
            }
        }




        Precue_circle.pos=[Probex,Probey];
        Precue_probe = new visual.Polygon({"win": psychoJS.window, "name": "CProbe", "size": [6, 6], "edges": 100, "ori": 0.0, "pos": [Probex,Probey], "anchor": "center", "lineWidth": 0.0, "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": 1.0, "depth": (- 10.0), "interpolate": true});

        PinkCenter=[Probex,Probey];
        Brownnoise.pos = [Probex, Probey];
        CProbe = new visual.Polygon({"win": psychoJS.window, "name": "CProbe", "size": [6, 6], "edges": 100, "ori": 0.0, "pos": [Probex,Probey], "anchor": "center", "lineWidth": 0.0, "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": 1.0, "depth": (- 10.0), "interpolate": true});

        Lprobe = new visual.Polygon({"win": psychoJS.window, "name": "Lprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [Probex-60,Probey], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": null, "interpolate": true, "autoDraw": true});
        Rprobe = new visual.Polygon({"win": psychoJS.window, "name": "Rprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [Probex+60,Probey], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": null, "interpolate": true, "autoDraw": true});
        Uprobe = new visual.Polygon({"win": psychoJS.window, "name": "Uprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [Probex,Probey+60], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": null, "interpolate": true, "autoDraw": true});
        Dprobe = new visual.Polygon({"win": psychoJS.window, "name": "Dprobe", "size": [10, 10], "edges": 100, "ori": 0.0, "pos": [Probex,Probey-60], "anchor": "center", "lineWidth": 0.0, "depth": (- 10.0), "colorSpace": "rgb", "lineColor": [-1, 1, -1], "fillColor": [-1, 1, -1], "opacity": null, "interpolate": true, "autoDraw": true});
        Precue_circle.setAutoDraw(true)
        Precue_probe.setAutoDraw(true)

        document.body.style.cursor = "none";
      End JS Routine:
        Precue_circle.setAutoDraw(false)
        Precue_probe.setAutoDraw(false)
    TextComponent precue_text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 30
      pos = (0, 400)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text:
        Pay attention to the circle's position.

        Click the mouse to continue.
    MouseComponent movie_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine movie
    CodeComponent circleresponse
      Code Type = Auto->JS
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      Each Frame:
        t = movieClock.getTime();
        if ((t <= 0.5) or (t >= 1)):
            CircleResp.setAutoDraw(true);
            Responseprobe.setAutoDraw(true);
        else:
            CircleResp.setAutoDraw(false);
            Responseprobe.setAutoDraw(false);
      End Routine:
        CircleResp.setAutoDraw(false);
        Responseprobe.setAutoDraw(false);
    CodeComponent movie_mouse_code
      Code Type = JS
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      Begin JS Routine:
        PinkCenter=[Probex,Probey]
        controlCenter=[0,0]
        mouse_dX = 0;
        mouse_dY = 0;
        tmpdelta = [0, 0];
        tmpspd=0;
        mouse1 = [];
        mouse2 = [];
        mouse3 = [];
        mousehit = 0;
        mousspotx = 0;
        mousspoty = 0;
      Each JS Frame:
        [mouse_dX, mouse_dY] = movie_mouse.getPos();
        delta = [(mouse_dX - controlCenter[0]), (mouse_dY - controlCenter[1])];
        MouseDist = Math.sqrt((Math.pow(delta[0], 2) + Math.pow(delta[1], 2)));
        speedvalue = (Math.pow(2, ((MouseDist / radarradius) * Maxspeed)) - 1);
        if ((MouseDist <= radarradius)) {
            rad = Math.atan2(delta[1], delta[0]);
            tmpdelta = delta;
            pinkdirection = (((rad * (180 / Math.PI)) + 360) % 360);
            spdcontrol=speedvalue;
            tmpspd = speedvalue;
            mousehit = 1;
            mousespotappear = 1;
            document.body.style.cursor='none';
        } else {
            rad = Math.atan2(tmpdelta[1], tmpdelta[0]);
            spdcontrol=tmpspd;
            mousespotappear = 0;
            document.body.style.cursor='auto';
            if ((mousehit === 0)) {
                pinkdirection = null;
                speedvalue = null;
            }
        }
        mousspotx = ((Math.cos(rad) * MouseDist) + controlCenter[0]);
        mousspoty = ((Math.sin(rad) * MouseDist) + controlCenter[1]);
        xphase = (Math.cos(rad) * spdcontrol);
        yphase = (Math.sin(rad) * spdcontrol);
        [mouse1, mouse2, mouse3] = movie_mouse.getPressed();
        //only after three presentation and click then the trial can be terminated
        if (movie_loop.thisRepN>=3 && mouse1) {
            routineForceEnded = true;
            continueRoutine = false;
            movie_loop.finished = true;
            Brownnoise.setAutoDraw(false);
            for (var idx in tmpimagelist) {
                tmpimagelist[idx].setAutoDraw(false);
                }
            CProbe.setAutoDraw(false);
            Lprobe.setAutoDraw(false);
            Rprobe.setAutoDraw(false);
            Uprobe.setAutoDraw(false);
            Dprobe.setAutoDraw(false);
        }
    CodeComponent movie_code
      Code Type = JS
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      Begin JS Routine:
        frame = 0;
        loonset = 0;
      Each JS Frame:
        frameTolerance = 0.005;
        startTime = (0.5-frameTolerance);
        endTime = (1.005-frameTolerance);
        frameTime = frameduration;

        if ((t >= startTime) && (t <= endTime) && (frame < 15)){
            t = movieClock.getTime();
            frame = Math.floor(((t - startTime) / frameTime));
            if (frame<=0) {
                frame=0;
            }

            if (frame==0) {
                loonset=t;
            }


              if (frame<=14) {

                image = tmpimagelist[frame];
                image.setAutoDraw(true);
                if (frame === 7) {
                    CProbe.setAutoDraw(true);
                } else {
                    CProbe.setAutoDraw(false);
                }
            // here we record the frame onset time in the third presentation!
                if ((TrainExpswitch.thisN >= 1)) {
                    if (movie_loop.thisN==2){
                    psychoJS.experiment.addData('Hz',psychoJS.window.getActualFrameRate())
                    psychoJS.experiment.addData(("TimeDiff" + frame.toString()), t-loonset-(frameTime*frame))
                    }
                }
               }
        } else {
           frame = 0
            for (var idx in tmpimagelist) {
            tmpimagelist[idx].setAutoDraw(false);
            }

        }


        Lprobe.draw();
        Rprobe.draw();
        Uprobe.draw();
        Dprobe.draw();
      End JS Routine:
        for (var idx in tmpimagelist) {
                tmpimagelist[idx].setAutoDraw(false);
            }



        CProbe.setAutoDraw(false);
        if ((TrainExpswitch.thisN === 1)) {
            if (movie_loop.thisN==2){
                dat = psychoJS.experiment._currentTrialData
                tmpT=dat.TimeDiff1+dat.TimeDiff2+dat.TimeDiff3+dat.TimeDiff4+dat.TimeDiff5+dat.TimeDiff6+dat.TimeDiff7+dat.TimeDiff8+dat.TimeDiff9+dat.TimeDiff10+dat.TimeDiff11+dat.TimeDiff12+dat.TimeDiff13+dat.TimeDiff14;
                console.log(tmpT/15)
            }
        }
    CodeComponent brown_code_2
      Code Type = JS
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      Begin JS Routine:
        tmpphasex=0;
        tmpphasey=0;
      Each JS Frame:
        frameTolerance = 0.005;
        startTime = (2.0-frameTolerance);
        endTime = (2.5 - frameTolerance);
        frameTime = frameduration;


        if ((t >= startTime) && (t <= endTime)){
            t = movieClock.getTime();
             frame = Math.floor(((t - startTime) / frameTime));
            if (frame<=0) {
                frame=0;
            }
            if (frame==0) {
                loonset=t;
            }

             tmpphasex=Probex + xphase * (frame+1);
             tmpphasey=Probey + yphase * (frame+1);
             Brownnoise.pos=[tmpphasex,tmpphasey];
             Brownnoise.draw();
             BrownMask_2.draw();
        } else {
            Brownnoise.setAutoDraw(false);
            BrownMask_2.setAutoDraw(false);
        }
      End JS Routine:
        Brownnoise.setAutoDraw(false);
        BrownMask_2.setAutoDraw(false);
    ImageComponent BrownMask_2
      color = 0.0000, 0.0000, 0.0000
      image = img/BG.png
      mask = img/circlemasks.png
      pos [set every repeat] = PinkCenter
      size = (4000,2300)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 1
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    PolygonComponent mousespot_2
      fillColor = 0, -1, 1
      lineColor = 0, -1, 1
      opacity [set every frame] = mousespotappear
      pos [set every frame] = [mousspotx,mousspoty]
      saveStartStop = False
      shape = circle
      size = [5, 5]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent TimeRunOut
      Code Type = JS
      Each JS Frame:
        elapsedTime = (performance.now() - startTime) / 1000; // Calculate elapsed time in seconds

        if (elapsedTime >= timeLimit) {
            continueRoutine = false; // End the current routine
            psychoJS.quit('The experiment has ended because the time limit was reached.', false); // End the experiment and save data
        }
  Routine feedback
    CodeComponent FB_code
      Code Type = JS
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      Begin JS Routine:
        GTFBtext = new visual.TextStim({
            win: psychoJS.window,
            name: 'GTFBtext',
            text: '',
            font: 'Arial',
            units: undefined,
            pos: [(-500), 100], height: 30.0,  wrapWidth: 1000.0, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color([(- 1.0), (- 1.0), (- 1.0)]),  opacity: undefined,
            depth: -3.0
        });

        RespFBtext = new visual.TextStim({
            win: psychoJS.window,
            name: 'RespFBtext',
            text: '',
            font: 'Arial',
            units: undefined,
            pos: [(-500), (- 100)], height: 30.0,  wrapWidth: undefined, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color([1.0, 0.0, 0.0]),  opacity: undefined,
            depth: -4.0
        });

        GTArrow = new visual.Polygon ({
            win: psychoJS.window, name: 'GTArrow',
            edges: 4, size:[1.0, 1.0],
            ori: 1.0, pos: controlCenter,
            lineWidth: 1.0,
            colorSpace: 'rgb',
            lineColor: new util.Color([(- 1.0), (- 1.0), (- 1.0)]),
            fillColor: new util.Color([(- 1.0), (- 1.0), (- 1.0)]),
            opacity: undefined, depth: -5, interpolate: true,
        });
        GTArrow.setVertices([[(- 0.025), 0], [0.025, 0], [0.025, 0.45], [0.1, 0.45], [0, 0.5], [(- 0.1), 0.45], [(- 0.025), 0.45]]);

        RespArrow = new visual.Polygon ({
            win: psychoJS.window, name: 'RespArrow',
            edges: 4, size:[1.0, 1.0],
            ori: 1.0, pos: controlCenter,
            lineWidth: 1.0,
            colorSpace: 'rgb',
            lineColor: new util.Color([1.0, 0.0, 0.0]),
            fillColor: new util.Color([1.0, 0.0, 0.0]),
            opacity: 0.95, depth: -6, interpolate: true,
        });
        RespArrow.setVertices([[(- 0.025), 0], [0.025, 0], [0.025, 0.45], [0.1, 0.45], [0, 0.5], [(- 0.1), 0.45], [(- 0.025), 0.45]]);


        Passtext = new visual.TextStim({
            win: psychoJS.window,
            name: 'Passtext',
            text: FBtext3,
            font: 'Arial',
            units: undefined,
            pos: [0, 0], height: 50.0,  wrapWidth: 1000.0, ori: 0.0,
            languageStyle: 'LTR',
            color: new util.Color(FBcolor),  opacity: undefined,
            depth: -7.0
        });
    CodeComponent trainFB_code
      Code Type = Auto->JS
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      Begin Routine:
        #only practice give feedback
        if TrainExpswitch.thisN==0: # train
            if (speedvalue is None or pinkdirection is None):
                FBtext1="The target motion:" + "\n Direction: %.2f" % (Math.round(angle*100)/100) + "°" + "\n Speed: %.2f" % (Math.round(Speed*100)/100) + "pixels/frame"
                FBtext2="No response"
                GTDirection = (- (angle - 90));
                RespDirection = 0;
                GTlength = ((Math.log2((Speed + 1)) / Maxspeed) * radarradius*2);
                Resplength = 0;
            else:
                FBtext1="The target motion:" + "\n Direction: %.2f" % (Math.round(angle*100)/100) + "°" + "\n Speed: %.2f" % (Math.round(Speed*100)/100) + "pixels/frame"
                FBtext2="Your response:" + " \n Direction: %.2f" % (Math.round(pinkdirection*100)/100) + "°" + "\n Speed: %.2f" % (Math.round(speedvalue*100)/100) + "pixels/frame"
                GTDirection = (- (angle - 90));
                GTlength = ((Math.log2((Speed + 1)) / Maxspeed) * radarradius*2);
                RespDirection = (- (pinkdirection - 90));
                Resplength = ((Math.log2((speedvalue + 1)) / Maxspeed) * radarradius*2);
            #put feedback
            GTFBtext.setText(FBtext1);
            RespFBtext.setText(FBtext2);
            GTArrow.setSize([100, GTlength]);
            GTArrow.setOri(GTDirection);
            #GTArrow.pos=[Probex,Probey];
            RespArrow.setSize([100, Resplength]);
            RespArrow.setOri(RespDirection);
            #RespArrow.pos=[Probex,Probey];
            GTFBtext.setAutoDraw(true);
            RespFBtext.setAutoDraw(true);
            GTArrow.setAutoDraw(true);
            RespArrow.setAutoDraw(true);
            CircleResp.setAutoDraw(true);
      End Routine:
        GTFBtext.setAutoDraw(false);
        RespFBtext.setAutoDraw(false);
        GTArrow.setAutoDraw(false);
        RespArrow.setAutoDraw(false);
        CircleResp.setAutoDraw(false);
    CodeComponent ExpTrainFB_code
      Code Type = Auto->JS
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      Begin Routine:
        Lprobe.autoDraw = false;
        Rprobe.autoDraw = false;
        Uprobe.autoDraw = false;
        Dprobe.autoDraw = false;
        document.body.style.cursor = "auto";
        Brownnoise.setAutoDraw(false);
        BrownMask_2.setAutoDraw(false);

        GTu = (Math.cos(((angle / 180) * pi)) * Speed);
        GTv = (Math.sin(((angle / 180) * pi)) * Speed);
        Respu = (Math.cos(((pinkdirection / 180) * pi)) * speedvalue);
        Respv = (Math.sin(((pinkdirection / 180) * pi)) * speedvalue);
        tmpEPE = Math.sqrt((Math.pow((GTu - Respu), 2) + Math.pow((GTv - Respv), 2)));
        directDiff=abs(angle-pinkdirection);
        if directDiff >=180:
            directDiff=abs(directDiff-360);
        console.log("angleDiff:" +directDiff);

        # if the response is reasonable good, then next practice
        # if not, do it again
        # if pass six "good' practice then go to formal
        # if do over 30 trials, it will also move on
        if TrainExpswitch.thisN==0: # train
            Traintrial=Traintrial+1;
            thisExp.addData('Traintrial', Traintrial)
            if (tmpEPE <=10) & (directDiff <=30):
                practicePass=practicePass +1;
                trialpass=1;
                FBcolor=[-1,1,-1];
                FBtext="Please proceed to the next practice trial.";
            else:
                trialpass=0;
                nopassx = Probex;
                nopassy = Probey;
                nopassangle = angle;
                nopassspeed = Speed;
                nopasssloc=Loc;
                FBcolor=[1,-1,-1];
                FBtext="Please try again.";
            if practicePass >= 6:
                trials.finished = true;
                routineForceEnded = true;
                FBtext="Practice complete.";
                FBcolor=[-1,-1,-1];
            if Traintrial >=30:
                trials.finished = true;
                routineForceEnded = true;
                FBtext="Practice complete.";
                FBcolor=[-1,-1,-1];
            console.log("train:" +practicePass);
        elif TrainExpswitch.thisN==1: #main
            Maintrial=Maintrial+1;
            thisExp.addData('Maintrial', Maintrial)
            EPE = (EPE + tmpEPE);
            Respcount = (Respcount + 1);
            FBtext="Experiment: %2.0f" % (trials.thisN+1) + " / 80 trials"
            if tmpT!= NaN:
              Timediff=Timediff+(tmpT/15);
              Prescount = (Prescount + 1);
            if trials.thisTrialN >= 40:
                trials.finished = true;
                routineForceEnded = true;
        elif TrainExpswitch.thisN==2: #main
            Maintrial=Maintrial+1;
            thisExp.addData('Maintrial', Maintrial)
            EPE = (EPE + tmpEPE);
            Respcount = (Respcount + 1);
            FBtext="Experiment: %2.0f" % (Maintrial) + " / 80 trials"
            if tmpT!= NaN:
              Timediff=Timediff+(tmpT/15);
              Prescount = (Prescount + 1);
            if trials.thisTrialN >= 40:
                trials.finished = true;
                routineForceEnded = true;

        thisExp.addData('GTAngle', angle)
        thisExp.addData('GTSpeed', Speed)
        thisExp.addData('ResAngle', pinkdirection)
        thisExp.addData('ResSpeed', speedvalue)
        thisExp.addData('EPE', tmpEPE)
        thisExp.addData('timeDiff', tmpT/15)
        thisExp.addData('DirectionDiff', directDiff)
        thisExp.addData('Realloc', Loc)
        thisExp.addData('Repeatno', trainrepeatno)





        document.body.style.cursor='auto';
      End Experiment:
        document.body.style.cursor = "auto";
    TextComponent trialno_text
      color [set every repeat] = $FBcolor
      letterHeight = 50
      pos = (0, 350)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every repeat]:
        $FBtext
    MouseComponent FB_mouse
      forceEndRoutineOnPress = any click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine endthank
    CodeComponent end_code
      Code Type = Auto->JS
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      Begin Routine:
        meanEPE=EPE/Respcount
        thisExp.addData('MeanEPE', meanEPE)
        meanTimediff=Timediff/Prescount
        thisExp.addData('MeanTimeDiff', meanTimediff)


        EPEText="Mean End Point Error: %.2f" % (Math.round(meanEPE*100)/100) + " pixels/frame"
        TimeText="Mean Refresh Rate  Error: %.2f" % (Math.round(meanTimediff*10000)/10) + " ms"
        elapsedTime = (performance.now() - startTime) / 1000
        thisExp.addData('Expduration', elapsedTime)


        endtext="This concludes the experiment." + "\n\n Thank you very much."
    TextComponent ThanksText
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 40
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      wrapWidth = 1000
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      text [set every repeat]:
        $endtext
    MouseComponent Exp_End_M
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      saveStartStop = False
      startVal [time (s)] = 0.0
      timeRelativeTo = experiment
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Flow
  Routine welcome
  LoopInitiator DistanceLoop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 999
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    Routine pause
    Routine DistCalibration
    Routine ShowDistance
  LoopTerminator DistanceLoop
  Routine pause
  Routine moviedemo
  Routine probeexplain
  LoopInitiator probedemo_loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 2
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    Routine Probedefine
    Routine precuedemo
    Routine probedemo
  LoopTerminator probedemo_loop
  Routine responseexplain
  Routine pause
  LoopInitiator Responseloop loopType="TrialHandler"
    loopType = sequential
    nReps = 999
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    Routine ResponseDemo
  LoopTerminator Responseloop
  Routine pause
  Routine moviestart
  LoopInitiator TrainExpswitch loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 3
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    Routine moviedefine
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $csvfile
      loopType = random
      nReps = 1
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      Routine precue
      LoopInitiator movie_loop loopType="TrialHandler"
        isTrials = False
        loopType = sequential
        nReps = 999
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        Routine movie
      LoopTerminator movie_loop
      Routine pause
      Routine feedback
    LoopTerminator trials
  LoopTerminator TrainExpswitch
  Routine endthank
